OpenViBE-Scenario

Generic stream reader => #0
  Filename = C:/Users/uzimith/Desktop/Research/m2/openvibe_v2/signals/20160707/kensuke2_ses2.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #2
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #3
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching => #6
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> 0xc67a01dc Stimulation based epoching => #7
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
New input[0]=#2.Epoched signal, New input[1]=#3.Epoched signal, New input[2]=#4.Epoched signal, New input[3]=#5.Epoched signal, New input[4]=#6.Epoched signal, New input[5]=#7.Epoched signal -> Analytics
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_signals.py
  Address = 192.168.129.7
  Port = 8081
  0x8d21ff41 = C:/Users/uzimith/Desktop/Research/m2/openvibe_v2/send_signals_to_mac.cfg
#0.Output stream 4 -> Player Controller "Program Stop"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
