OpenViBE-Scenario

0xc67a01dc Generic stream reader => #0
  Filename = C:/Users/uzimith/Desktop/Research/m2/openvibe_v2/signals/kensuke2_ses1
Input stream 1=#0.Output stream 2, Input stream 2=#0.Target / Non-Target -> Identity => #1
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Non-Target epoching" => #2
  Epoch duration (in sec) = 0.8
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Target Epoching" => #3
  Epoch duration (in sec) = 0.8
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Target=#2.Epoched signal, Non Target=#3.Epoched signal -> Analytics
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_signals.py
  Address = 172.16.0.115
  Port = 8081
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_signals_to_mac.cfg
#0.Output stream 4 -> Player Controller "Program Stop"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
