OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Trigger
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Stimulation Generator => #2
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/stimulator.py
  BaseStimulation = OVTK_StimulationId_Label_00
  TriggerStimulation = OVTK_StimulationId_Label_00
  0x8d21ff41 = ${Player_ScenarioDirectory}/stimurator.cfg
Data=#0.Signal stream, Stimulations=#2.Stimulus -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2.Answer -> Delay
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/delay.py
  0x8d21ff41 = ${Player_ScenarioDirectory}/delay.cfg
-> Player Controller "Program Stop"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2.Stimulus -> Stimulation to Mobile
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_stimulation.py
  Address = 192.168.2.2
  Port = 12345
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_stimulus_to_mobile.cfg
#2.Answer -> Instruction to Mac
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_stimulation.py
  Address = 172.17.32.44
  Port = 12347
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_answer_to_mac.cfg
Input stream 1=#0.Experiment information, Signal=#0.Signal stream, Stimulus=#2.Stimulus, Instruction=#2.Answer, target/non-target=#2.TargetLabel -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/riken[$core{date}-$core{time}].ov
  Use compression = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/stream_writer.cfg
Input stream 1=#0.Signal stream, Input stream 2=#2.Stimulus -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #10
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #11
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #12
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_03
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #13
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_04
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #14
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_05
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching => #15
  Epoch duration (in sec) = 0.800000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Label_06
New input[0]=#10.Epoched signal, New input[1]=#11.Epoched signal, New input[2]=#12.Epoched signal, New input[3]=#13.Epoched signal, New input[4]=#14.Epoched signal, New input[5]=#15.Epoched signal -> Analytics
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_signals.py
  Address = 172.17.32.44
  Port = 8081
  0x8d21ff41 = C:/Users/uzimith/Desktop/Research/m2/openvibe_v2/send_signals_to_mac.cfg
