OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Trigger
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Stimulation Generator => #2
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/stimulator.py
  BaseStimulation = OVTK_StimulationId_Label_00
  TriggerStimulation = OVTK_StimulationId_Label_00
  0x8d21ff41 = ${Player_ScenarioDirectory}/stimurator.cfg
Data=#0.Signal stream, Stimulations=#2.TargetLabel -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 50
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#0.Signal stream, Input stream 2=#2.TargetLabel -> Identity => #4
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Non-Target epoching" => #5
  Epoch duration (in sec) = 0.8
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Target Epoching" => #6
  Epoch duration (in sec) = 0.8
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
Target=#5.Epoched signal, Non Target=#6.Epoched signal -> Analytics
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_signals.py
  Address = 172.17.32.44
  Port = 8081
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_signals_to_mac.cfg
#2.Answer -> Delay
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/delay.py
  0x8d21ff41 = ${Player_ScenarioDirectory}/delay.cfg
-> Player Controller "Program Stop"
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2.Stimulus -> Stimulation to Mobile
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_stimulation.py
  Address = 192.168.2.2
  Port = 12345
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_stimulus_to_mobile.cfg
#2.Answer -> Instruction to Mac
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/box/send_stimulation.py
  Address = 172.17.32.44
  Port = 12347
  0x8d21ff41 = ${Player_ScenarioDirectory}/send_answer_to_mac.cfg
Input stream 1=#0.Experiment information, Signal=#0.Signal stream, Stimulus=#2.Stimulus, Instruction=#2.Answer, target/non-target=#2.TargetLabel -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/riken[$core{date}-$core{time}].ov
  Use compression = false
  0x8d21ff41 = ${Player_ScenarioDirectory}/stream_writer.cfg
